PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data filename = 'test_data/test'
  Experiment info = {'participant': 'test'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  expName = rhythm_trial_test
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent cross_white_2
      fillColor = 0.6, 0, 0.7
      lineColor = 0.6, 0, 0.7
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent cross_colored
      fillColor = 0.6, 0.7, 0
      lineColor = 0.6, 0.7, 0
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 11
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    KeyboardComponent key_resp
      allowedKeys = 'b', 'n'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 11
      storeCorrect = True
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    KeyboardComponent key_resp_moving
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent cross_manage
      Code Type = Py
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      Begin Routine:
        cross_white.setAutoDraw(True)
        win.flip()
      End Routine:
        core.wait(1)
        cross_white.setAutoDraw(False)
        win.flip()
    CodeComponent sound_stim
      Code Type = Py
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      Begin Routine:
        sound_stim_started_time = core.getTime()
        play_trigger_on_stim_start()
        play_stim(stim_series=stim, sound=msg!="REST")
        play_trigger_on_end()
        #run_stim(port=port, delay=delay, scale=scale, soundfiles=['./sound/SD1010.WAV','./sound/SD0050.WAV'], sound=msg!="REST")
        sound_stim_end_time = core.getTime()
        trials.addData('stim.start_time', sound_stim_started_time)
        trials.addData('stim.end_time', sound_stim_end_time)
        trials.addData('stim.delay', delay)
        trials.addData('stim.scale', scale)
        trials.addData('stim.ans', ans)
        trials.addData('stim.msg', msg)
  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction
    TextComponent text_norm
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        リズム実験（テスト）

        最初にMOVE, DON'T MOVE, RESTのうちいずれかが表示されます。
        MOVEのときは音に合わせ一定のテンポでスペースキーを押す
        DON'T MOVEのときは体を動かさない
        RESTのときは音はなりません。体を動かさない

        [1/2]
        スペースキーを押して次へ
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
  Routine ending_message
    TextComponent text_norm_3
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        実験はこれで終了です。

        お疲れ様でした！
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_3.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm_3.setAlignHoriz('center')
  Routine break_section
    TextComponent text_norm_2
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        休憩


        スペースキーを押して再開
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine fixation_cross
    PolygonComponent cross_white
      fillColor = 0.6, 0, 0.7
      lineColor = 0.6, 0, 0.7
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent trig_on_fix
      Code Type = Py
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      Begin Routine:
        play_trigger_on_cross()
  Routine trial_inst
    TextComponent text_norm_4
      font = Osaka
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_4.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm_4.setAlignHoriz('center')
    CodeComponent build_stim
      Code Type = Py
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      Begin Routine:
        stim = build_stim(port=port, delay=delay, scale=scale, soundfiles=['./sound/SD1010.WAV','./sound/SD0050.WAV'])
        play_trigger_on_start()
  Routine instruction2
    TextComponent text_norm_5
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        リズム実験（テスト）

        十字マークの色が変わったあとに、
        最後になった音について
        早まってると感じたら "B"
        遅れてると感じたら "N"
        を入力

        [2/2]
        スペースキーを押して開始
    KeyboardComponent key_instruct_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_5
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_5.alignText= 'left'
  Routine del_test_data
    CodeComponent del_test_data_2
      Code Type = Py
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      Begin Routine:
        from pathlib import Path as _Path
        from shutil import rmtree as _rmtree
        _rmtree(_Path(filename).parent)
  Routine prepare
    CodeComponent init_modules
      Code Type = Py
      Before Experiment:
        import sys
        import time
        sys.path.append("./pkgs")

        from rhythm_trial_code.main import build_stim, play_stim
        from rhythm_trial_code.message import PlayFactories as _PF
        from rhythm_trial_code.serial_trigger import init_port

        debug = False
        port_name = "COM3"
        if len(sys.argv) > 1:
            if sys.argv[-1] == "DEBUG":
                debug = True
            else:
                port_name = sys.argv[-1]

        port = init_port(port_name, dummy=debug)

        _play_trigger_on_cross = _PF([]).trig_fctr(port, [4])
        play_trigger_on_cross = lambda: _play_trigger_on_cross(True)

        _play_trigger_on_start = _PF([]).trig_fctr(port, [5])
        play_trigger_on_start = lambda: _play_trigger_on_start(True)

        _play_trigger_on_stim_start= _PF([]).trig_fctr(port, [6])
        play_trigger_on_stim_start = lambda: _play_trigger_on_stim_start(True)

        _play_trigger_on_ans = _PF([]).trig_fctr(port, [7])
        play_trigger_on_ans = lambda: _play_trigger_on_ans(True)

        _play_trigger_on_move = _PF([]).trig_fctr(port, [8])
        play_trigger_on_move = lambda: _play_trigger_on_move(True)

        _play_trigger_on_ans_enabled = _PF([]).trig_fctr(port, [9])
        play_trigger_on_ans_enabled = lambda: _play_trigger_on_ans_enabled(True)

        _play_trigger_on_end = _PF([]).trig_fctr(port, [10])
        play_trigger_on_end = lambda: _play_trigger_on_end(True)


        # reset Port
        port.write([0])
      End Experiment:
        # Close the serial port
        port.write([0])
        port.close()
Flow
  Routine prepare
  Routine blank
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = exp_params/test.csv
    loopType = sequential
    nReps = 1
    random seed = 0
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    conditions:
      [OrderedDict([('delay', 0.2), ('scale', 1.1764052345967664), ('ans', 'n'), ('msg', "DON'T MOVE")]),
      OrderedDict([('delay', -0.2), ('scale', 1.097873798410574), ('ans', 'b'), ('msg', 'MOVE')]),
      OrderedDict([('delay', 0.0), ('scale', 1.0), ('ans', 'n'), ('msg', 'REST')]),
      OrderedDict([('delay', -0.2), ('scale', 1.1764052345967664), ('ans', 'b'), ('msg', "DON'T MOVE")]),
      OrderedDict([('delay', 0.2), ('scale', 1.097873798410574), ('ans', 'n'), ('msg', 'MOVE')]),
      OrderedDict([('delay', 0.2), ('scale', 1.1764052345967664), ('ans', 'n'), ('msg', "DON'T MOVE")]),
      OrderedDict([('delay', -0.2), ('scale', 1.097873798410574), ('ans', 'b'), ('msg', 'MOVE')]),
      OrderedDict([('delay', 0.0), ('scale', 1.0), ('ans', 'n'), ('msg', 'REST')]),
      OrderedDict([('delay', -0.2), ('scale', 1.1764052345967664), ('ans', 'b'), ('msg', "DON'T MOVE")]),
      OrderedDict([('delay', 0.2), ('scale', 1.097873798410574), ('ans', 'n'), ('msg', 'MOVE')])]
    Routine trial_inst
    Routine fixation_cross
    Routine trial
  LoopTerminator trials
  Routine ending_message
